opentrons/protocol-designer 5.2.6
schemaVersion: 3
protocolName: Kirby Creation
author: Sydney Lam
description: Kirby<3
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p300_single_gen2: {mount: left}
  p1000_single_gen2: {mount: right}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  NEST 12 Well Reservoir 15 mL: {definitionId: opentrons/nest_12_reservoir_15ml/1, slot: 1}
  Corning 384 Well Plate 112 µL Flat: {definitionId: opentrons/corning_384_wellplate_112ul_flat/1, slot: 3}
  Opentrons 96 Filter Tip Rack 1000 µL: {definitionId: opentrons/opentrons_96_filtertiprack_1000ul/1, slot: 2}
pipetteTiprackAssignments:
  p300_single_gen2: opentrons/opentrons_96_filtertiprack_200ul/1
  p1000_single_gen2: opentrons/opentrons_96_filtertiprack_1000ul/1
ingredients:
  - Water: {description: Water}
  - Red: {description: DNA Gard}
  - Pink: {description: Diluted DNA Gard}
  - Black: {description: Outline}
  - Medium Pink
ingredLocations:
  NEST 12 Well Reservoir 15 mL:
    Pink {volume: 15000}: A1
    Black {volume: 15000}: A2
    Red {volume: 10000}: A3
    Medium Pink {volume: 10000}: A4
savedStepForms:
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 100
  path: multiDispense
  changeTip: once
  aspirate_labware: NEST 12 Well Reservoir 15 mL
  aspirate_wells: A2
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  aspirate_mmFromBottom: 2
  dispense_labware: Corning 384 Well Plate 112 µL Flat
  dispense_wells: H4-K4, F5, G5, L5, N5, O5, E6, M6, O6, D7, P7, C8, P8, B9, P9, B10, P10, B11, F11, P11, B12, F12-H12, O12, P12, B13, O13, B14, O14, C15, F15, O15, C16, F16-H16, O16, D17, O17, E18, F18, K18, N18, O18, G19-J19, L19-N19
  dispense_mmFromBottom: 3.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 100
  path: multiDispense
  changeTip: once
  aspirate_labware: NEST 12 Well Reservoir 15 mL
  aspirate_wells: A3
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  aspirate_mmFromBottom: 2
  dispense_labware: Corning 384 Well Plate 112 µL Flat
  dispense_wells: K5, F6, L6, E7, L7, D8, C9, C10, J15, M15, N15, D16, L16, E17, K17
  dispense_mmFromBottom: 3.5
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 100
  path: multiDispense
  changeTip: once
  aspirate_labware: NEST 12 Well Reservoir 15 mL
  aspirate_wells: A4
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  aspirate_mmFromBottom: 2
  dispense_labware: Corning 384 Well Plate 112 µL Flat
  dispense_wells: N6, M7-O7, L8-O8, L9-O9, M10-O10, I11, N11, O11, I12, M16, N16, I17, L17-N17, L18, M18
  dispense_mmFromBottom: 3.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 100
  path: multiDispense
  changeTip: once
  aspirate_labware: NEST 12 Well Reservoir 15 mL
  aspirate_wells: A1
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  aspirate_mmFromBottom: 2
  dispense_labware: Corning 384 Well Plate 112 µL Flat
  dispense_wells: H5-J5, G6-K6, F7-K7, E8-K8, D9-K9, D10-L10, C11-E11, G11, H11, J11-M11, C12-E12, J12-N12, C13-N13, C14-N14, D15, E15, G15-I15, K15, L15, E16, I16-K16, F17-H17, J17, G18-J18
  dispense_mmFromBottom: 3.5
  disposalVolume_checkbox: true
  disposalVolume_volume: 100
  blowout_location: Trash
labwareDefinitions:
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commands:
- pickUpTip: {pipette: p1000_single_gen2, labware: Opentrons 96 Filter Tip Rack 1000 µL, well: A1}
- aspirate: {pipette: p1000_single_gen2, volume: 1000, labware: NEST 12 Well Reservoir 15 mL, well: A2, offsetFromBottomMm: 2, flowRate: 137.35}
- dispense: {pipette: p1000_single_gen2, volume: 100, labware: Corning 384 Well Plate 112 µL Flat, well: H4, offsetFromBottomMm: 3.5, flowRate: 137.35}
- dispense: {pipette: p1000_single_gen2, volume: 100, labware: Corning 384 Well Plate 112 µL Flat, well: I4, offsetFromBottomMm: 3.5, flowRate: 137.35}
- dispense: {pipette: p1000_single_gen2, volume: 100, labware: Corning 384 Well Plate 112 µL Flat, well: J4, offsetFromBottomMm: 3.5, flowRate: 137.35}
- dispense: {pipette: p1000_single_gen2, volume: 100, labware: Corning 384 Well Plate 112 µL Flat, well: K4, offsetFromBottomMm: 3.5, flowRate: 137.35}
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